PsychoPy2experiment version="3.0.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
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Routines
  Routine trial
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = begin study
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  Routine trials
    TextComponent text2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $text
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        import serial
        ser = serial.Serial(:"/dev/usbserial-BBTKUSBTTL", 115200, timeout=1)
        ser.write(bytes([trials["trigger"]]))
        ser.write('00')
        ser.close()
  Routine end
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        press to end the study
Flow
  Routine trial
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = ../../../../Users/joellarwood/Desktop/psychopy test/Book1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'fuck '), ('cond', 1), ('trig', 5)]),
      OrderedDict([('word', 'this '), ('cond', 2), ('trig', 6)]),
      OrderedDict([('word', 'coding'), ('cond', 3), ('trig', 7)]),
      OrderedDict([('word', 'trigger'), ('cond', 4), ('trig', 8)]),
      OrderedDict([('word', 'bullshit '), ('cond', 0), ('trig', 9)])]
    Routine trials
  LoopTerminator trials_2
  Routine end
